v_init = -80.1
celsius = 35
w_hvaP_kBK = 0.0013326326085149748
w_hvaNL_kBK = 0.9353448577503667
vshift_iH = 3.3969689456511896
htau_factor_iH = 10^0.8422791088806553
htau_min_iH = 0.0
vshift_kP = 7.337477906476168
mtau_factor_kP = 10^-0.2953744581920051
htau_factor_kP = 10^0.23875302920172292
mtau_min_kP = 0.0
htau_min_kP = 0.0
wshift_kP = 10.170014277545556
mk_factor_kP = 10^-0.8250862724379527
hk_factor_kP = 10^0.3964858674885196
vshift_kT = 4.745647108494333
mtau_factor_kT = 10^-0.7116420407916131
htau_factor_kT = 10^-0.4764832246002939
mtau_min_kT = 0.0
htau_min_kT = 0.0
wshift_kT = 1.270276181096023
mk_factor_kT = 10^-0.018490918363594705
hk_factor_kT = 10^-0.15673025206262436
vshift_caL = 2.0567562267642643
mtau_factor_caL = 10^0.07017305219865011
mtau_min_caL = 0.0
mk_factor_caL = 10^0.11838421929705661
ltau_factor_caL = 10^-1.6533161485566037
nlinf_caL = -1.8719669045977692
klinf_caL = 10^-3.7889699733462545
linf_min_caL = 0.31013210854270956
vshift_kM = -9.320293258799776
mk_factor_kM = 10^-0.9819511396942306
mtau_factor_kM = 10^-0.6121035172729856
mtau_min_kM = 0.0
cshift_kSK = -1.346649858313112
mtau_factor_kSK = 10^0.09547915449601291
mtau_min_kSK = 0.0
w_hvaP_kSK = 0.7003581216790451
w_hvaNL_kSK = 0.00042612619710930433
mk_factor_kSK = 10^0.335826029766261
vshift_caP = 2.5648045786537237
mtau_factor_caP = 10^1.2218546956447338
mtau_min_caP = 0.0
mk_factor_caP = 10^-0.5442663402763972
ltau_factor_caP = 10^1.461640806839609
nlinf_caP = -1.4163935771485885
klinf_caP = 10^-0.16750207251438476
linf_min_caP = 1.0
vshift_caN = -8.933511329639316
mtau_factor_caN = 10^0.34186046114002255
mtau_min_caN = 0.0
mk_factor_caN = 10^0.08625725544542578
ltau_factor_caN = 10^0.5848286311789948
nlinf_caN = -1.1454004176652424
klinf_caN = 10^-1.1854993454428198
linf_min_caN = 0.9960449316299744
vshift_naP = -14.496639231813525
mtau_factor_naP = 10^0.009407396429632842
htau_factor_naP = 10^-0.5053803477470018
mtau_min_naP = 0.0
htau_min_naP = 0.0
wshift_naP = 10.676603395763342
mk_factor_naP = 10^0.13068870123931808
hk_factor_naP = 10^-0.5043460041843804
vshift_caT = 0.5843656626135165
mtau_factor_caT = 10^0.04893830227308854
htau_factor_caT = 10^-1.4461251016899852
mtau_min_caT = 0.0
htau_min_caT = 0.0
wshift_caT = -13.868741038626643
mk_factor_caT = 10^-0.2520150993745781
hk_factor_caT = 10^0.14878169871013802
vshift_naT = -6.585613547872206
mtau_factor_naT = 10^-0.454978717687275
htau_factor_naT = 10^-0.1774169809859666
mtau_min_naT = 0.0
htau_min_naT = 0.0
wshift_naT = -2.6112252835336465
mk_factor_naT = 10^0.21257906981601393
hk_factor_naT = 10^-0.42041562261508386
  

begintemplate PTcell
  public init, morphology, geom_nseg_fixed
  public soma, dend, apic, axon
  create soma, apic[121], dend[81], axon[1]

  objref this, CellRef

  public all, somatic, apical, axonal, basal, APC
  objref all, somatic, apical, axonal, basal, APC

obfunc getCell(){
        return this
}
proc topol() { local i
  connect apic(0), soma(0)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[3](1)
  connect apic[6](0), apic[2](1)
  connect apic[7](0), apic[1](1)
  for i = 8, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  connect apic[13](0), apic[7](1)
  for i = 14, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  for i = 18, 20 connect apic[i](0), apic[i-1](1)
  connect apic[21](0), apic[19](1)
  connect apic[22](0), apic[18](1)
  connect apic[23](0), apic[17](1)
  for i = 24, 26 connect apic[i](0), apic[i-1](1)
  connect apic[27](0), apic[25](1)
  connect apic[28](0), apic[24](1)
  connect apic[29](0), apic[23](1)
  for i = 30, 31 connect apic[i](0), apic[i-1](1)
  connect apic[32](0), apic[30](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  connect apic[35](0), apic[29](1)
  for i = 36, 37 connect apic[i](0), apic[i-1](1)
  connect apic[38](0), apic[36](1)
  connect apic[39](0), apic[35](1)
  for i = 40, 41 connect apic[i](0), apic[i-1](1)
  connect apic[42](0), apic[40](1)
  for i = 43, 44 connect apic[i](0), apic[42](1)
  connect apic[45](0), apic[39](1)
  for i = 46, 47 connect apic[i](0), apic[45](1)
  for i = 48, 49 connect apic[i](0), apic[47](1)
  for i = 50, 52 connect apic[i](0), apic[i-1](1)
  connect apic[53](0), apic[51](1)
  connect apic[54](0), apic[50](1)
  connect apic[55](0), apic[49](1)
  for i = 56, 57 connect apic[i](0), apic[55](1)
  for i = 58, 59 connect apic[i](0), apic[i-1](1)
  connect apic[60](0), apic[58](1)
  for i = 61, 62 connect apic[i](0), apic[60](1)
  for i = 63, 64 connect apic[i](0), apic[62](1)
  for i = 65, 66 connect apic[i](0), apic[i-1](1)
  connect apic[67](0), apic[65](1)
  for i = 68, 69 connect apic[i](0), apic[67](1)
  connect apic[70](0), apic[64](1)
  for i = 71, 73 connect apic[i](0), apic[i-1](1)
  connect apic[74](0), apic[72](1)
  connect apic[75](0), apic[71](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  connect apic[78](0), apic[70](1)
  for i = 79, 80 connect apic[i](0), apic[i-1](1)
  connect apic[81](0), apic[79](1)
  connect apic[82](0), apic[78](1)
  connect apic[83](0), apic[57](1)
  for i = 84, 85 connect apic[i](0), apic[i-1](1)
  connect apic[86](0), apic[84](1)
  connect apic[87](0), apic[83](1)
  for i = 88, 89 connect apic[i](0), apic[87](1)
  for i = 90, 91 connect apic[i](0), apic[89](1)
  for i = 92, 95 connect apic[i](0), apic[i-1](1)
  connect apic[96](0), apic[94](1)
  connect apic[97](0), apic[93](1)
  connect apic[98](0), apic[92](1)
  for i = 99, 100 connect apic[i](0), apic[i-1](1)
  connect apic[101](0), apic[99](1)
  connect apic[102](0), apic[98](1)
  connect apic[103](0), apic[91](1)
  for i = 104, 105 connect apic[i](0), apic[103](1)
  for i = 106, 108 connect apic[i](0), apic[i-1](1)
  connect apic[109](0), apic[107](1)
  connect apic[110](0), apic[106](1)
  connect apic[111](0), apic[105](1)
  for i = 112, 113 connect apic[i](0), apic[111](1)
  connect apic[114](0), apic(1)
  for i = 115, 116 connect apic[i](0), apic[114](1)
  for i = 117, 118 connect apic[i](0), apic[i-1](1)
  connect apic[119](0), apic[117](1)
  connect apic[120](0), apic[116](1)
  connect dend(0), soma(0)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  connect dend[5](0), soma(0)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  connect dend[12](0), dend[8](1)
  connect dend[13](0), dend[5](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), soma(0)
  for i = 17, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  for i = 21, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  connect dend[26](0), dend[20](1)
  connect dend[27](0), soma(0)
  for i = 28, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  connect dend[35](0), dend[27](1)
  for i = 36, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  connect dend[39](0), dend[35](1)
  connect dend[40](0), soma(0)
  for i = 41, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  connect dend[44](0), dend[40](1)
  connect dend[45](0), soma(0)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), soma(0)
  for i = 49, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  connect dend[54](0), dend[48](1)
  for i = 55, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  connect dend[58](0), dend[54](1)
  connect dend[59](0), soma(0)
  for i = 60, 62 connect dend[i](0), dend[i-1](1)
  connect dend[63](0), dend[61](1)
  connect dend[64](0), dend[60](1)
  for i = 65, 66 connect dend[i](0), dend[64](1)
  for i = 67, 68 connect dend[i](0), dend[i-1](1)
  connect dend[69](0), dend[67](1)
  connect dend[70](0), dend[66](1)
  connect dend[71](0), dend[59](1)
  for i = 72, 73 connect dend[i](0), dend[i-1](1)
  connect dend[74](0), dend[72](1)
  connect dend[75](0), dend[71](1)
  for i = 76, 77 connect dend[i](0), dend[75](1)
  connect dend[78](0), soma(0)
  for i = 79, 80 connect dend[i](0), dend[78](1)
  connect axon(0), soma(0)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, -22, 22)
	pt3dadd(0, 0, 0, 22)
  }
  apic {pt3dclear()
	pt3dadd(0, 0, -22, 4.67)
	pt3dadd(0, 0, 0, 4.67)
	pt3dadd(-0.77, 15.15, -11.79, 4.67)
	pt3dadd(-2.87, 19.51, -12.04, 3.85)
	pt3dadd(-3.08, 20.41, -12.06, 3.85)
  }
  apic[1] {pt3dclear()
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  }
}
proc shape3d_2() {
  apic[14] {	pt3dadd(-2.94, 42.33, -12.62, 1.36)
	pt3dadd(-1.03, 43.11, -13.17, 1.24)
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  }
}
proc shape3d_3() {
  apic[25] {	pt3dadd(-8, 67.61, 27.7, 1.05)
  }
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  }
}
proc shape3d_4() {
  apic[42] {	pt3dadd(24.43, 131.85, -10.02, 1.49)
	pt3dadd(26.77, 132.72, -13.93, 1.49)
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  }
}
proc shape3d_5() {
  apic[56] {	pt3dadd(-40.09, 185.24, 12.63, 1.1)
	pt3dadd(-45.7, 185.08, 14.36, 1.03)
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  }
}
proc shape3d_6() {
  apic[68] {	pt3dadd(-130.63, 702.03, -64.5, 0.93)
	pt3dadd(-134.42, 702.66, -67.59, 0.93)
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  }
}
proc shape3d_7() {
  apic[78] {	pt3dadd(-9.47, 557.18, 26.92, 1.29)
	pt3dadd(-9.9, 564.39, 27.8, 1.29)
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  }
}
proc shape3d_8() {
  apic[90] {	pt3dadd(2.51, 271.22, -17.4, 1.37)
	pt3dadd(1.45, 273.96, -18.38, 1.26)
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  }
}
proc shape3d_9() {
  apic[97] {	pt3dadd(-35.56, 709.75, -9.75, 1.04)
	pt3dadd(-35.66, 714.73, -9.7, 1.04)
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  }
}
proc shape3d_10() {
  apic[106] {	pt3dadd(38.45, 660.52, -49.66, 1.08)
	pt3dadd(38.31, 666.45, -50.46, 1.08)
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  }
}
proc shape3d_11() {
  apic[118] {	pt3dadd(-159.82, -30.6, -1.65, 0.99)
	pt3dadd(-160.64, -30.79, -0.92, 0.99)
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  }
}
proc shape3d_12() {
  dend[7] {	pt3dadd(86.12, -21.44, 31.84, 1.19)
	pt3dadd(89.12, -22.03, 33.12, 1.19)
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  }
}
proc shape3d_13() {
  dend[22] {	pt3dadd(58.32, 21.52, -3.08, 1.05)
	pt3dadd(61.21, 21.85, -1.81, 1.05)
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  }
}
proc shape3d_14() {
  dend[31] {	pt3dadd(40.32, -103.12, 27.51, 0.96)
  }
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  }
}
proc shape3d_15() {
  dend[43] {	pt3dadd(-36.94, -52.14, 19.41, 1.15)
	pt3dadd(-38.44, -54.99, 20, 1.06)
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  }
}
proc shape3d_16() {
  dend[56] {	pt3dadd(38.51, 11.86, -74.01, 0.99)
	pt3dadd(39.82, 11.18, -75.54, 0.99)
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  }
}
proc shape3d_17() {
  dend[65] {	pt3dadd(-67.93, -75.81, -22.76, 1.18)
	pt3dadd(-69.27, -80.03, -23.86, 1.18)
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  }
}
proc shape3d_18() {
  dend[77] {	pt3dadd(-28.23, -8.72, -68.75, 1.01)
	pt3dadd(-32.62, -11.07, -72.82, 1.01)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}

proc subsets() { local i
  //all = new SectionList()
    soma all.append()
    for i=0, 120 apic[i] all.append()
    for i=0, 80 dend[i] all.append()
    axon all.append()

  //somatic = new SectionList()
    soma somatic.append()

  //axonal = new SectionList()
    axon axonal.append()

  //basal = new SectionList()
    for i=0, 80 dend[i] basal.append()

  //apical = new SectionList()
    for i=0, 120 apic[i] apical.append()

}

proc init() {
  all = new SectionList()
  apical = new SectionList()
  axonal = new SectionList()
  basal = new SectionList()
  somatic = new SectionList()


  //For compatibility with BBP CCells
  CellRef = this


  topol()
  subsets()
  geom_nseg()
  insertChannel()
  biophys()

}

proc distribute_distance(){local x localobj sl
  strdef stmp, distfunc, mech

  sl = $o1
  mech = $s2
  distfunc = $s3
  this.soma distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    // use distance(x) twice for the step distribution case, e.g. for calcium hotspot
    sprint(stmp, distfunc, secname(), x, distance(x), distance(x))
    execute(stmp)
  }
}

proc distribute_distance_CaX(){local x, factor, min_dist, max_dist, gfactor, d, g localobj sl
  strdef stmp, mech

  sl = $o1
  mech = $s2
  factor = $3
  min_dist = $4
  max_dist = $5
  gfactor = $6
                               
  this.soma distance(0, 0.5)
//  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
//    sprint(stmp, distfunc, secname(), x, distance(x))
//    execute(stmp)
    d = distance(x)
    if ((d >= min_dist) && (d <= max_dist)) {
      g = factor * gfactor
    } else {
      g = gfactor
    }
    sprint(stmp, "%s %s(%f) = %f", secname(), mech, x, g)
    execute(stmp)
  }
}

proc distribute_distance_iH(){local x, d localobj sl
  //strdef stmp, distfunc, mech

  sl = $o1
  //mech = $s2
  //distfunc = $s3
  this.soma distance(0, 0.5)
  //sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    //sprint(stmp, distfunc, secname(), x, distance(x))
    //execute(stmp)
    d = distance(x)
    if (d >= 713) {
      d = 713
    }
    gbar_iH(x) = ( 0.51 * exp( d * 0.96 / 155 ) + 0.49) * 0.0001
  }
}

proc geom_nseg() {
  //TODO: geom_nseg_fixed depends on segCounts which is calculated by
  //  geom_nsec.  Can this be collapsed?
  this.geom_nseg_fixed(40)
}

proc insertChannel() {
  forsec this.all {
    insert pas
    insert kBK
    insert CaDynamics
    insert iH
    insert kP
    insert kT
    insert caL
    insert kM
    insert naP
    insert naT
    insert caN
    insert caP
    insert kSK
    insert caT
  }
  forsec this.apical {
  }
  forsec this.axonal {
  }
  forsec this.basal {
  }
  forsec this.somatic {
  }
}

proc biophys() { local sh
  
  forsec CellRef.all {
    ena = 50
    ek = -85 //-102
    ehcn_iH = -45
    Ra = 150
    g_pas = 3.3000000000000003e-05
    e_pas = -92.099999999999994
    cm = 1





  }
  
  forsec CellRef.apical {
    gbar_kBK = 0.0016097199895290383
    gbar_naP = 0.00011352322821133391
    gbar_naT = 0.0028740565567532067
    gbar_kSK = 0.00063646023501715769
    decay_hvaP_CaDynamics = 194.93169987350478
    decay_lva_CaDynamics = 14.138443369502882
    decay_hvaNL_CaDynamics = 104.51819113338429
    decay_CaDynamics = 39.272189637516433
    gamma_lva_CaDynamics = 0.046446060219095399
    gamma_hvaP_CaDynamics = 0.047657095248991491
    gamma_hvaNL_CaDynamics = 0.040281498952724287
  }
  
  forsec CellRef.axonal {
    gbar_kBK = 0.00090995264845569247
    gbar_iH = 0.0001
    gbar_kP = 0.4105656767399653
    gbar_kT = 0.097822867723006857
    pbar_caL = 4.0734097506438294e-05
    gbar_kM = 0.00820611414347369
    gbar_naP = 0.0051829624647905786
    gbar_naT = 6.0705180492851873
    pbar_caN = 4.1690491920068321e-06
    pbar_caP = 5.4115741010090635e-05
    gbar_kSK = 0.0013946353742181022
    pbar_caT = 1.9561989512283002e-05
    decay_hvaP_CaDynamics = 113.06328694748197
    decay_lva_CaDynamics = 113.0510525016779
    decay_hvaNL_CaDynamics = 92.775836146575827
    decay_CaDynamics = 40.038735925839411
    gamma_lva_CaDynamics = 0.030857940205033359
    gamma_hvaP_CaDynamics = 0.049873311393145367
    gamma_hvaNL_CaDynamics = 0.050000000000000003
  }
  
  forsec CellRef.basal {
    gbar_kBK = 0.0019214683896617514
    gbar_iH = 0.0001
    gbar_kP = 0.0073828612614587645
    gbar_kT = 0.075710972277111932
    pbar_caL = 1.0243456706209621e-05
    gbar_kM = 3.7215239002877306e-05
    gbar_naP = 0.00025108704723186294
    gbar_naT = 0.044693552041489573
    pbar_caN = 2.7638505335979783e-05
    pbar_caP = 1.8842599542353779e-06
    gbar_kSK = 0.0022074316295929881
    pbar_caT = 0.0002712101476534309
    decay_hvaP_CaDynamics = 126.9877252303861
    decay_lva_CaDynamics = 50.484905879979038
    decay_hvaNL_CaDynamics = 40.3282127456647
    decay_CaDynamics = 112.61337823531342
    gamma_lva_CaDynamics = 0.038376011125676561
    gamma_hvaP_CaDynamics = 0.049943402827894431
    gamma_hvaNL_CaDynamics = 0.046009505689624176
  }
  
  forsec CellRef.somatic {
    gbar_kBK = 0.00036298722890274008
    gbar_iH = 0.0001
    gbar_kP = 0.0041680115145568165
    gbar_kT = 0.029902785338983287
    pbar_caL = 8.3132344935149687e-05
    gbar_kM = 0.00011113074065159988
    gbar_naP = 0.00015010091614485731
    gbar_naT = 0.22270633737545123
    pbar_caN = 3.1952106738825395e-05
    pbar_caP = 6.7366780616683363e-07
    gbar_kSK = 0.0013721350550179143
    pbar_caT = 0.00016592795631900403
    decay_hvaP_CaDynamics = 52.540455554437457
    decay_lva_CaDynamics = 25.040320704050629
    decay_hvaNL_CaDynamics = 38.744937529612159
    decay_CaDynamics = 60.710313704015796
    gamma_lva_CaDynamics = 0.045836236929865763
    gamma_hvaP_CaDynamics = 0.037492289251462758
    gamma_hvaNL_CaDynamics = 0.049126499329260512
  }
  
  
  distribute_distance_iH(CellRef.apical)
  distribute_distance(CellRef.apical, "gbar_kP", "( 0.96 * exp( -%.17g * 0.96 / 50 ) + 0.04) * 0.019888335778415624")
  
  distribute_distance(CellRef.apical, "gbar_kT", "( 0.96 * exp( -%.17g * 0.96 / 50 ) + 0.04) * 0.040517712044195187")
  distribute_distance(CellRef.apical, "gbar_kM", "( 0.96 * exp( -%.17g * 0.96 / 50 ) + 0.04) * 1.8890326620777117e-05")
  
  distribute_distance_CaX(CellRef.apical, "pbar_caL", 198.87734566385566, 575-100, 575+100, 9.8617879278050795e-08)  
  distribute_distance_CaX(CellRef.apical, "pbar_caN", 92.87935539485223, 575-100, 575+100, 2.1384602952926723e-05)
  distribute_distance_CaX(CellRef.apical, "pbar_caP", 1.0272836524094409, 575-100, 575+100, 2.9641780739334289e-06)
  distribute_distance_CaX(CellRef.apical, "pbar_caT", 173.14093787806118, 575-100, 575+100, 6.2836555038856543e-05)


	/// changes

	sh = 8
	forall {
		vshift_kBK = -6.363423823621769
		mtau_factor_kBK = 0
		mtau_min_kBK = 2.1602515287392623
		mk_factor_kBK = 10^0.20264450830640465
	}

	forall vshift_kBK -= sh

	vshift_naT -= sh
	forall for(x,0) gbar_naT(x) *= 0.5

	vshift_kP -= sh
	vshift_kT -= sh
	vshift_caL -= sh
	vshift_caT -= sh
	vshift_caN -= sh
	vshift_caP -= sh
	vshift_iH -= sh
	vshift_kM -= sh
	vshift_naP = vshift_naT + 14

	forall e_pas = -99

	forall for(x,0) gbar_naP(x) *= .115
	axon gbar_naP *= 3

	mk_factor_naP *= 4

	forall gbar_kSK *= 2

	soma {
		gbar_kBK = 30
		decay_hvaNL_CaDynamics /= 8
		vshift_kBK += 80 
		vsh_kBK = -80
		mtau_factor_kBK = 1
		mtau_min_kBK = 0
		mk_factor_kBK = 0.5
	}

	forall {
		gbar_kBK = 0
		for(x, 0) gbar_naP(x) *= 0.4
	}

	forall {
		cao = ca_lvao = ca_hvaPo = ca_hvaNLo = 1
	}
}


proc geom_nseg_fixed(/* chunkSize */) { local secIndex, chunkSize
  chunkSize = $1
  soma area(.5) // make sure diam reflects 3d points
  forsec all {
    nseg = 1 + 2*int(L/chunkSize)
  }
}


endtemplate PTcell


